PsychoPy2experiment version="3.1.2"
Settings
  Data filename = u'data/%s_%s' % (expInfo['Your English Initial (e.g. WWY):'], expInfo['date'])
  Experiment info = {'Your English Initial (e.g. WWY):': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = Black
  expName = 15:5 trial test (2)
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Routines
  Routine introduction
    TextComponent text
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Before we go to the real test, 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent text_42
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = let’s start with a practice!
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    TextComponent text_43
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    TextComponent text_78
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Thank you for providing us the above information.
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  Routine demo2
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = we assume you have been assigned to be the 2nd member in your group.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_44
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    TextComponent text_79
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = In this practice,
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  Routine demo3
    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = and remember the 2 motion videos shown next.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_45
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Please fixate at the cross in the centre of the screen
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    TextComponent text_46
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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  Routine demo4
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 2
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = 1
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    TextComponent text_47
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Test begins in
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  Routine demo5
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine demo6
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine demomovie1
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      movie = Motion videos/demo/Video 1.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine demomovie2
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = Motion videos/demo/Video 1.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine demo7
    TextComponent text_9
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = After viewing the videos, a memory test will follow.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_50
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = You will be viewing the test video first.
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    TextComponent text_51
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    TextComponent text_122
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = You would then be asked whether it has appeared before.
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  Routine demo8
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent text_52
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Test begins in
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  Routine demo9
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine demotest1
    MovieComponent movie_3
      backend = moviepy
      forceEndRoutine = False
      movie = Motion videos/demo/Video 2.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine demo10
    TextComponent text_14
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Please indicate your answer with the slider.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_53
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Remember that the value refers to your confidence level
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    TextComponent text_54
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = and it represents the mark you would gain if you are correct
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    TextComponent text_56
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    TextComponent text_48
      letterHeight = 0.03
      pos = (0, -0)
      startVal [time (s)] = 0.0
      text = or the mark you would lose if you are wrong.
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    TextComponent text_49
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Your performance will be determined by 
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    TextComponent text_55
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = the total marks you have at the end of the test.
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  Routine demoanswer1
    TextComponent text_15
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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    TextComponent text_16
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    RatingScaleComponent rating_4
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      End Routine:
        marker_1 = rating_4.getRating()
        markerposition1 = rating_4.getRating()

        noresponse = rating_4.noResponse
        if (rating_4 == noresponse):
            marker_1 = 0
    TextComponent text_17
      letterHeight = 0.02
      pos = (-0.42, -0.315)
      startVal [time (s)] = 0.0
      text = the number indicates your confidence level towards NO/YES:
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    TextComponent text_18
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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  Routine demo11
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent spacebar
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        if (marker_1 == 0):
            answer = 'incorrect'
        if (marker_1 > 0):
            answer = 'correct'
        if (marker_1 < 0):
            answer = 'incorrect'

        correct = visual.TextStim(win=win, name='correct',
            text='Your answer is ' '%s' %(answer),
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        score = visual.TextStim(win=win, name='score',
            text='Your score is ' '%3i' %(marker_1),
            font='Arial',
            pos=(0, -0.05), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
    TextComponent score
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = x
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    TextComponent correct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = x
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  Routine demoanswer2
    TextComponent text_19
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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    RatingScaleComponent rating_5
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        rating_5Clock = core.Clock()
        rating_5 = visual.RatingScale(win=win, name='rating_5', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart = markerposition1)
      End Routine:
        marker_2 = rating_5.getRating()
    PolygonComponent line
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.3)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_20
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Since you are assigned to be the 2nd member of your group,
        the response of 1 of your groupmate will appear for your reference.

        In this case, you will have one additional chance
        to answer to the same question.
    PolygonComponent verticalline
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0,0.3)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      ori = 180
      pos = (0.101, 0.32)
      shape = triangle
      size = (0.03, 0.02)
      startVal [time (s)] = 0.0
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    TextComponent memberA
      letterHeight = 0.02
      pos = (-0.33, 0.3)
      startVal [time (s)] = 0.0
      text = member A
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    TextComponent text_28
      letterHeight = 0.03
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
      text = 42
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    TextComponent text_73
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    TextComponent text_117
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    CodeComponent code_10
      Code Type = Py
      End Routine:
        noresponse = rating_5.noResponse
        if (rating_5 == noresponse):
            marker_2 = marker_1
  Routine demo12
    TextComponent spacebar2
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instruction
      letterHeight = 0.02
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        In the real test,
        we will not tell you whether your answer
        is correct or not after each question.
        Let’s try another question!
    TextComponent score2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = x
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    TextComponent correct2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = s
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    TextComponent totalscore
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = x
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        if(marker_2 == 0):
            answer2 = 'incorrect'
        if (marker_2 > 0):
            answer2 = 'correct'
        if (marker_2 < 0):
            answer2 = 'incorrect'

        correct2 = visual.TextStim(win=win, name='correct2',
            text='Your answer is ' '%s' %(answer2),
            font='Arial',
            pos=(0, 0.1), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        score2 = visual.TextStim(win=win, name='score2',
            text='Your score is ' '%3i' %(marker_2),
            font='Arial',
            pos=(0, 0.05), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        x = marker_1 + marker_2

        totalscore = visual.TextStim(win=win, name='totalscore',
            text='Your total score is ' '%3i' %(x),
            font='Arial',
            pos=(0, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
  Routine demo13
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  Routine demotest2
    MovieComponent movie_4
      backend = moviepy
      forceEndRoutine = False
      movie = Motion videos/demo/Video 1.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine demoanswer3
    TextComponent text_22
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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    RatingScaleComponent rating_6
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        rating_6Clock = core.Clock()
        rating_6 = visual.RatingScale(win=win, name='rating_5', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart = 0)
      End Routine:
        marker_3 = rating_6.getRating()
        markerposition2 = rating_6.getRating()
    TextComponent text_74
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    CodeComponent code_20
      Code Type = Py
      End Routine:
        noresponse = rating_6.noResponse
        if (rating_6 == noresponse):
            marker_3 = 0
  Routine demoanswer4
    TextComponent text_23
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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    RatingScaleComponent rating_7
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        rating_7Clock = core.Clock()
        rating_7 = visual.RatingScale(win=win, name='rating_5', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart = markerposition2)
      End Routine:
        marker_4 = rating_7.getRating()
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.3)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.3)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle2
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      ori = 180
      pos = (-0.204, 0.32)
      shape = triangle
      size = (0.03, 0.02)
      startVal [time (s)] = 0.0
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    TextComponent memberA2
      letterHeight = 0.02
      pos = (-0.33, 0.3)
      startVal [time (s)] = 0.0
      text = member A
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    TextComponent text_70
      letterHeight = 0.03
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
      text = -85
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    TextComponent text_75
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    CodeComponent code_21
      Code Type = Py
      End Routine:
        noresponse = rating_7.noResponse
        if (rating_7 == noresponse):
            marker_4 = marker3
  Routine demo14
    TextComponent text_24
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Sometimes, the test video shown
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_57
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = may not have appeared before.
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    TextComponent text_58
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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  Routine demo15
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  Routine demotest3
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  Routine demoanswer5
    TextComponent text_26
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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    RatingScaleComponent rating_8
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        rating_8Clock = core.Clock()
        rating_8 = visual.RatingScale(win=win, name='rating_8', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart = 0)
      End Routine:
        marker_5 = rating_8.getRating()
        markerposition2 = rating_8.getRating()
    TextComponent text_76
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    CodeComponent code_22
      Code Type = Py
      End Routine:
        noresponse = rating_8.noResponse
        if (rating_8 == noresponse):
            marker_5 = 0
  Routine demoanswer6
    TextComponent text_27
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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    RatingScaleComponent rating_9
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        rating_9Clock = core.Clock()
        rating_9 = visual.RatingScale(win=win, name='rating_9', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart = markerposition2)
      End Routine:
        marker_6 = rating_9.getRating()
    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.3)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.3)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle3
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      ori = 180
      pos = (-0.0504, 0.32)
      shape = triangle
      size = (0.03, 0.02)
      startVal [time (s)] = 0.0
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    TextComponent text_71
      letterHeight = 0.02
      pos = (-0.33, 0.3)
      startVal [time (s)] = 0.0
      text = member A
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    TextComponent text_72
      letterHeight = 0.03
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
      text = -21
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    TextComponent text_77
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    CodeComponent code_23
      Code Type = Py
      End Routine:
        noresponse = rating_9.noResponse
        if (rating_9 == noresponse):
            marker_6 = marker_5
  Routine demo16
    TextComponent nicejob
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Nice Job!
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spacebar3
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    TextComponent intruction2
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = You have finished the demo test.
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    TextComponent totalscore2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = x
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        y = int(marker_1) + int(marker_2) + int(marker_3) + int(marker_4) - int(marker_5) - int(marker_6)

        totalscore2 = visual.TextStim(win=win, name='totalscore2',
            text='Your total score is ' '%3i' %(y),
            font='Arial',
            pos=(0, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
  Routine test1
    TextComponent text_29
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Let’s begin the real experiment!
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_59
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Now you will be randomly assigned into a group of 4 people
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    TextComponent text_60
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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  Routine test2
    TextComponent text_61
      letterHeight = 0.03
      pos = (-0.02, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Loading...
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    TextComponent text_30
      letterHeight = 0.03
      pos = (0.06, 0)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = ...
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    TextComponent text_32
      letterHeight = 0.03
      pos = (0.06, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = ...
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  Routine test3
    TextComponent text_34
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = You are assigned to group
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_31
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = You are the           member of the group
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    TextComponent text_33
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    TextComponent group13
      letterHeight = 0.05
      pos = (0.02, 0.05)
      startVal [time (s)] = 0.0
      text = #13
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    TextComponent no4
      letterHeight = 0.05
      pos = (-0.06,0)
      startVal [time (s)] = 0.0
      text = 4th
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  Routine test4
    TextComponent text_35
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Please remember the 45 motion videos shown next 
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_62
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Please fixate at the cross in the center of the screen
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    TextComponent text_63
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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  Routine test5
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_37
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_38
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent text_64
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Test begins in
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  Routine testfixation
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  Routine testvideo
    MovieComponent movie_6
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $StudyPhase
      size = (1280,780)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine mathtest
    TextComponent text_40
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = All the videos have been played.
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_118
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    TextComponent text_119
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Please calculate the answers for the maths questions
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    TextComponent text_123
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = before the memory test.
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  Routine mathquestion1
    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        17-8 = ?
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 100
      labels = -100, 100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_65
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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  Routine mathquestion2
    TextComponent text_66
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 22-11+7 = ?
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    TextComponent text_67
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine mathquestion3
    TextComponent text_68
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 24-31+5 = ? 
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    TextComponent text_69
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    RatingScaleComponent rating_3
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine testfixation_2
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  Routine loop1
    RatingScaleComponent rating_10
      forceEndRoutine = True
      high = 100
      labels = 100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [condition] = 5
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        rating_10 = visual.RatingScale(win=win, name='rating_10', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart = 0)
      End Routine:
        marker_1 = rating_10.getRating()

        noresponse = rating_10.noResponse
        if (rating_10 == noresponse):
            marker_1 = 0
    TextComponent text_107
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    TextComponent text_127
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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  Routine loop2
    RatingScaleComponent rating_11
      forceEndRoutine = True
      high = 100
      labels = 100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [condition] = 5
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        rating_11 = visual.RatingScale(win=win, name='rating_11', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart= marker_1)
      End Routine:
        marker_2 = rating_11.getRating()

        noresponse = rating_11.noResponse
        if (rating_11 == noresponse):
            marker_2 = marker_1
    PolygonComponent polygon_5
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.3)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent trianglecon1
      fillColor = $[1,1,1]
      pos = (0.084, 0.32)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_6
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.3)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    TextComponent conScore
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_108
      letterHeight = 0.02
      pos = (-0.33, 0.3)
      startVal [time (s)] = 0.0
      text = member A
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    CodeComponent code_13
      Code Type = Py
      Begin Experiment:
        from random import uniform, random
        from random import uniform, random, choice, sample
      Begin Routine:
        a = randint(-10,11)
        b = randint(0,11)

        c = randint(-10,11)
        d = randint(0,11)

        e = randint(-10,11)
        f = randint(0,11)

        cr1 = (marker_1+a-10)
        cr2 = (marker_1+a+c-20)
        cr3 = (marker_1+a+c+e-30)

        cr4 = (marker_1+a-20)
        cr5 = (marker_1+a+c-40)
        cr6 = (marker_1+a+c+e-60)

        cr7 = (marker_1+a-40)
        cr8 = (marker_1+a+c-80)
        cr9 = (marker_1+a+c+e-120)

        cr10 = randint(-100,101)
        cr11 = randint(-100,101)
        cr12 = randint(-100,101)

        cr13 = (marker_1-b)
        cr14 = (marker_1-d)
        cr15 = (marker_1-f)

        cr16 = (marker_1+10+a)
        cr17 = (marker_1+10+a+10-d)
        cr18 = (marker_1+10+a+10-d+10-f)

        cr19 = (marker_1+a)
        cr20 = (marker_1+c)
        cr21 = (marker_1+e)

        cr22 = (marker_1+20+a)
        cr23 = (marker_1+20+a+20-d)
        cr24 = (marker_1+20+a+20-d+20-f)

        cr25 = (marker_1+40+a)
        cr26 = (marker_1+40+a+40+c)
        cr27 = (marker_1+40+a+40+c+40+e)

        cr28 = (marker_1+b)
        cr29 = (marker_1+d)
        cr30 = (marker_1+f)

        cr31 = (marker_1-10+a)
        cr32 = (marker_1-10+a-10+d)
        cr33 = (marker_1-10+a-10+d-10+f)

        cr34 = (marker_1+20+a)
        cr35 = (marker_1+20+a+20+c)
        cr36 = (marker_1+20+a+20+c+20+e)

        confeda1 = [cr1, cr2, cr3]
        confeda2 = [cr4, cr5, cr6]
        confeda3 = [cr7, cr8, cr9]
        confeda4 = [cr10, cr11, cr12]
        confeda5 = [cr13, cr14, cr15]

        confeda6 = [cr16, cr17, cr18]
        confeda7 = [cr4, cr5, cr6]
        confeda8 = [cr1, cr2, cr3]
        confeda9 = [cr10, cr11, cr12]
        confeda10 = [cr19, cr20, cr21]

        confeda11 = [cr16, cr17, cr18]
        confeda12 = [cr22, cr23, cr24]
        confeda13 = [cr4, cr5, cr6]
        confeda14 = [cr10, cr11, cr12]
        confeda15 = [cr19, cr20, cr21]

        confeda16 = [cr16, cr17, cr18]
        confeda17 = [cr22, cr23, cr24]
        confeda18 = [cr25, cr26, cr27]
        confeda19 = [cr10, cr11, cr12]
        confeda20 = [cr28, cr29, cr30]

        confeda21 = [cr16, cr17, cr18]
        confeda22 = [cr22, cr23, cr24]
        confeda23 = [cr31, cr32, cr33]
        confeda24 = [cr10, cr11, cr12]
        confeda25 = [cr19, cr20, cr21]

        confeda26 = [cr1, cr2, cr3]
        confeda27 = [cr34, cr35, cr36]
        confeda28 = [cr22, cr23, cr24]
        confeda29 = [cr10, cr11, cr12]
        confeda30 = [cr19, cr20, cr21]

        ListConfedA = [confeda1, confeda1, confeda2, confeda2, confeda3, confeda3, confeda4, confeda5]
        confedA = choice(ListConfedA)

        ListConfedB = [confeda6, confeda6, confeda7, confeda7, confeda8, confeda8, confeda9, confeda10]
        confedB = choice(ListConfedB)

        ListConfedC = [confeda11, confeda11, confeda12, confeda12, confeda13, confeda13, confeda14, confeda15]
        confedC = choice(ListConfedC)

        ListConfedD = [confeda16, confeda16, confeda17, confeda17, confeda18, confeda18, confeda19, confeda20]
        confedD = choice(ListConfedD)

        ListConfedE = [confeda21, confeda21, confeda22, confeda22, confeda23, confeda23, confeda24, confeda25]
        confedE = choice(ListConfedE)

        ListConfedF = [confeda26, confeda26, confeda27, confeda27, confeda28, confeda28, confeda29, confeda30]
        confedF = choice(ListConfedF)


        confed = []
        if marker_1 in range(60,101):
            confed = confedA[0]
        elif marker_1 in range(30,60):
            confed = confedB[0]
        elif marker_1 in range(0,30):
            confed = confedC[0]
        elif marker_1 in range(-100,-59):
            confed = confedD[0]
        elif marker_1 in range(-59,-29):
            confed = confedE[0]
        elif marker_1 in range(-29,0):
            confed = confedF[0]


        conScore = visual.TextStim(win=win, name='conScore',
            text='%3i' %(confed),
            font='Arial',
            pos=(0.3, 0.3), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        TriPos = (confed*2.4)/1000

        trianglecon1 = visual.ShapeStim(
            win=win, name='trianglecpn1',
            vertices=[[-(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [+(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [0,(0.030, 0.020)[1]/2.0]],
            ori=180, pos=(TriPos, 0.32),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-3.0, interpolate=True)


        confedtwo = []
        if marker_1 in range(60,101):
            confedtwo = confedA[1]
        elif marker_1 in range(30,60):
            confedtwo = confedB[1]
        elif marker_1 in range(0,30):
            confedtwo = confedC[1]
        elif marker_1 in range(-100,-59):
            confedtwo = confedD[1]
        elif marker_1 in range(-60,-29):
            confedtwo = confedE[1]
        elif marker_1 in range(-30,0):
            confedtwo = confedF[1]

        confedthree = []
        if marker_1 in range(60,101):
            confedthree = confedA[2]
        elif marker_1 in range(30,60):
            confedthree = confedB[2]
        elif marker_1 in range(0,30):
            confedthree = confedC[2]
        elif marker_1 in range(-100,-59):
            confedthree = confedD[2]
        elif confedthree in range(-59,-29):
            confedthree = confedE[2]
        elif marker_1 in range(-29,0):
            confedthree = confedF[2]
      End Routine:
        thisExp.addData('Confed1', confed)
    TextComponent text_124
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    TextComponent text_128
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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  Routine pretest
    TextComponent text_102
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Here comes the memory test.
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    TextComponent text_103
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar when you are ready
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_104
      letterHeight = 0.05
      pos = (-0.05, 0)
      startVal [time (s)] = 0.0
      text = 4th
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    TextComponent text_105
      letterHeight = 0.05
      pos = (-0.21, -0.05)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_120
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = As you are the          member of the group,
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    TextComponent text_121
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = you will have          more chances to answer the same question.
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  Routine countdown
  Routine loop3
    RatingScaleComponent rating_12
      forceEndRoutine = True
      high = 100
      labels = 100,100
      low = -100
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [condition] = 5
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        rating_12 = visual.RatingScale(win=win, name='rating_12', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart= marker_2)
      End Routine:
        marker_3 = rating_12.getRating()

        noresponse = rating_12.noResponse
        if (rating_12 == noresponse):
            marker_3 = marker_2
    PolygonComponent polygon_7
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.2)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_8
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.2)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent trianglecon2
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.084, 0.32)
      startVal [time (s)] = 0.0
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    TextComponent conScore2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_109
      letterHeight = 0.02
      pos = (-0.33, 0.2)
      startVal [time (s)] = 0.0
      text = member B
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    CodeComponent confed
      Code Type = Py
      Begin Routine:
        confedtwo = []
        if marker_1 in range(60,101):
            confedtwo = confedA[1]
        elif marker_1 in range(30,60):
            confedtwo = confedB[1]
        elif marker_1 in range(0,30):
            confedtwo = confedC[1]
        elif marker_1 in range(-100,-59):
            confedtwo = confedD[1]
        elif marker_1 in range(-59,-29):
            confedtwo = confedE[1]
        elif marker_1 in range(-29,0):
            confedtwo = confedF[1]

        conScore2 = visual.TextStim(win=win, name='conScore2',
            text='%3i' %(confedtwo),
            font='Arial',
            pos=(0.3, 0.2), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        TriPos2 = (confedtwo*2.4)/1000

        trianglecon2 = visual.ShapeStim(
            win=win, name='trianglecon2',
            vertices=[[-(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [+(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [0,(0.030, 0.020)[1]/2.0]],
            ori=180, pos=(TriPos2, 0.22),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-3.0, interpolate=True)
    PolygonComponent polygon_9
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.3)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_10
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.3)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle3_1
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent conScore1_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent text_110
      letterHeight = 0.02
      pos = (-0.33, 0.3)
      startVal [time (s)] = 0.0
      text = member A
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    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        conScore1_1 = visual.TextStim(win=win, name='conScore1_1',
            text='%3i' %(confed),
            font='Arial',
            pos=(0.3, 0.3), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        TriPos = (confed*2.4)/1000

        triangle3_1 = visual.ShapeStim(
            win=win, name='triangle3_1',
            vertices=[[-(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [+(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [0,(0.030, 0.020)[1]/2.0]],
            ori=180, pos=(TriPos, 0.32),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-3.0, interpolate=True)
      End Routine:
        thisExp.addData('Confed2', confedtwo)
    TextComponent text_125
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    TextComponent text_129
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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  Routine loop4
    RatingScaleComponent rating_13
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [condition] = 5
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    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        rating_13 = visual.RatingScale(win=win, name='rating_13', marker='triangle', size=1.0, pos=[0.0, -0.4], low=-100, high=100, labels=['-100', ' 100'], scale='', markerStart= marker_3)
      End Routine:
        marker_4 = rating_13.getRating()

        noresponse = rating_13.noResponse
        if (rating_13 == noresponse):
            marker_4 = marker_3
    PolygonComponent polygon_11
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.1)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_12
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.1)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle4
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent conScore3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent text_111
      letterHeight = 0.02
      pos = (-0.33, 0.1)
      startVal [time (s)] = 0.0
      text = member C
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    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        confedthree = []
        if marker_1 in range(60,101):
            confedthree = confedA[2]
        elif marker_1 in range(30,60):
            confedthree = confedB[2]
        elif marker_1 in range(0,30):
            confedthree = confedC[2]
        elif marker_1 in range(-100,-59):
            confedthree = confedD[2]
        elif marker_1 in range(-59,-29):
            confedthree = confedE[2]
        elif marker_1 in range(-29,0):
            confedthree = confedF[2]


        conScore3 = visual.TextStim(win=win, name='conScore3',
            text='%3i' %(confedthree),
            font='Arial',
            pos=(0.3, 0.1), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        TriPos3 = (confedthree*2.4)/1000

        triangle4 = visual.ShapeStim(
            win=win, name='triangle4',
            vertices=[[-(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [+(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [0,(0.030, 0.020)[1]/2.0]],
            ori=180, pos=(TriPos3, 0.12),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-3.0, interpolate=True)
    PolygonComponent triangle1_2
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_13
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.3)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_14
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.3)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    TextComponent conScore1_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent text_112
      letterHeight = 0.02
      pos = (-0.33, 0.3)
      startVal [time (s)] = 0.0
      text = member A
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    CodeComponent code_18
      Code Type = Py
      Begin Routine:
        conScore1_2 = visual.TextStim(win=win, name='conScore1_2',
            text='%3i' %(confed),
            font='Arial',
            pos=(0.3, 0.3), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        TriPos = (confed*2.4)/1000

        triangle1_2 = visual.ShapeStim(
            win=win, name='triangle1_2',
            vertices=[[-(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [+(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [0,(0.030, 0.020)[1]/2.0]],
            ori=180, pos=(TriPos, 0.32),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-3.0, interpolate=True)
    PolygonComponent triangle2_1
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_15
      fillColor = $[1,1,1]
      lineWidth = 5
      ori = 90
      pos = (0, 0.2)
      shape = line
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_16
      fillColor = $[1,1,1]
      lineWidth = 7
      pos = (0, 0.2)
      shape = line
      size = (0.48, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent conScore2_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent text_113
      letterHeight = 0.02
      pos = (-0.33, 0.2)
      startVal [time (s)] = 0.0
      text = member B
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        conScore2_1 = visual.TextStim(win=win, name='conScore2_1',
            text='%3i' %(confedtwo),
            font='Arial',
            pos=(0.3, 0.2), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        TriPos2 = (confedtwo*2.4)/1000

        triangle2_1 = visual.ShapeStim(
            win=win, name='triangle2_1',
            vertices=[[-(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [+(0.030, 0.020)[0]/2.0,-(0.030, 0.020)[1]/2.0], [0,(0.030, 0.020)[1]/2.0]],
            ori=180, pos=(TriPos2, 0.22),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-3.0, interpolate=True)
      End Routine:
        thisExp.addData('Confed3', confedthree)
    TextComponent text_126
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = NO                                                                                  YES
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    TextComponent text_130
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Has the video appeared before? 
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  Routine testmovie
    MovieComponent movie_7
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $TestPhase
      size = (1280,780)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Bye
    TextComponent text_114
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = GOOD JOB!
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    TextComponent text_115
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = You’ve completed the test!
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    TextComponent text_116
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mathquestion4
    TextComponent text_131
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 12-9+5 = ? 
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    TextComponent text_132
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    RatingScaleComponent rating_14
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine mathquestion5
    TextComponent text_133
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 21-12+5 = ?
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    TextComponent text_134
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    RatingScaleComponent rating_15
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine mathquestion6
    TextComponent text_135
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 4+9-3 = ?
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    TextComponent text_136
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    RatingScaleComponent rating_16
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine mathquestion7
    TextComponent text_137
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 5-21+7 = ?
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    TextComponent text_138
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    RatingScaleComponent rating_17
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine mathquestion8
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  Routine mathquestion9
    TextComponent text_141
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 7+9+8 = ?
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    TextComponent text_142
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please slide the slider and press the display box above to proceed
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    RatingScaleComponent rating_19
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine mathquestion10
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  Routine test
    MovieComponent movie_8
      backend = moviepy
      forceEndRoutine = False
      movie = /Users/murmur/Desktop/psychopy-final2/final motion clip 2/video/Studyphase/43.mp4
      size = (1440,758)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine survey1
    TextComponent text_145
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Before you begin, we would like to collect some personal information.
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    TextComponent text_146
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Please press spacebar to continue
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine survey2
    TextComponent text_148
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Gender:
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    TextComponent text_149
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Press M if you are Male
        Press F if you are Female
        Press N if you do not want to specify
    KeyboardComponent key_resp_17
      allowedKeys = 'm','n','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine survey3
    TextComponent text_147
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Age:
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    TextComponent text_150
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Press A if you are 18-24 years old
        Press B if you are 25-34 years old
        Press C if you are 35-44 years old
        Press D if you are 45-54 years old
        Press E if you are 55-64 years old
        Press F if you are 65-74 years old
        Press G if you are over 74 years old
    KeyboardComponent key_resp_18
      allowedKeys = 'a','b','c','d','e','f','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine survey3_2
  Routine survey4
    TextComponent text_151
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Ethnicity:
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    TextComponent text_152
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Press W if you are White
        Press H if you are Hispanic
        Press F if you are African American
        Press N if you are Native American
        Press A if you are Asian
        Press O if you are Other
    KeyboardComponent key_resp_19
      allowedKeys = 'w','h','f','n','a','o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine survey5
    TextComponent text_153
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = The highest degree or level of education you have completed:
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    TextComponent text_154
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Press P for lower than high school diploma
        Press H for high school degree or equivalent
        Press B for bachelor degree
        Press M for master degree
        Press D for doctorate
    KeyboardComponent key_resp_20
      allowedKeys = 'p','h','b','m','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine saf
    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = -100,100
      pos = (0, -0.4)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating', 'labels45', 'triangleMarker']
      ticks = (-100,100)
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    RatingScaleComponent rating_21
      forceEndRoutine = True
      high = 100
      labels = -100,100
      low = -100
      markerStart = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  Routine survey1
  Routine survey2
  Routine survey3
  Routine survey4
  Routine survey5
  Routine introduction
  Routine demo2
  Routine demo3
  Routine demo4
  Routine demo5
  Routine demomovie1
  Routine demo6
  Routine demomovie2
  Routine demo7
  Routine demo8
  Routine demo9
  Routine demotest1
  Routine demo10
  Routine demoanswer1
  Routine demo11
  Routine demoanswer2
  Routine demo12
  Routine demo13
  Routine demotest2
  Routine demoanswer3
  Routine demoanswer4
  Routine demo14
  Routine demo15
  Routine demotest3
  Routine demoanswer5
  Routine demoanswer6
  Routine demo16
  Routine test1
  Routine test2
  Routine test3
  Routine test4
  Routine test5
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = StudyPhase.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    Routine testfixation
    Routine testvideo
  LoopTerminator trials
  Routine mathtest
  Routine mathquestion1
  Routine mathquestion2
  Routine mathquestion3
  Routine mathquestion4
  Routine mathquestion5
  Routine mathquestion6
  Routine mathquestion7
  Routine mathquestion8
  Routine mathquestion9
  Routine mathquestion10
  Routine pretest
  Routine demo8
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TestPhase.xlsx
    loopType = random
    nReps = 1
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    Routine testfixation_2
    Routine testmovie
    Routine loop1
    Routine loop2
    Routine loop3
    Routine loop4
  LoopTerminator trials_2
  Routine Bye
